PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Sart_experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Sart_instructions
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    KeyboardComponent instruction_response
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Sart_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now see a series of digits (1–9) appear on the screen, one at a time.
        Your task is:

        Press the SPACEBAR as quickly and accurately as possible
        for every digit EXCEPT the number 3.
        Do NOT press anything when the number 3 appears

        The digits will appear very briefly, so stay focused throughout the task.

        Press ENTER to begin.
  Routine sart_trial
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    TextComponent digit
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text [set every repeat] = $digit_value
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    TextComponent mask
      letterHeight = 0.05
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.25
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = $correct_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.15
      storeCorrect = True
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Flow
  Routine Sart_instructions
  LoopInitiator sart_loop loopType="TrialHandler"
    conditionsFile = C:/Users/matte/Desktop/Thesis/cogntive tasks/sart_conditions_180.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('digit_value', np.int64(1)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(2)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(3)), ('correct_resp', None)]),
      OrderedDict([('digit_value', np.int64(4)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(5)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(6)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(7)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(8)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(9)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(1)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(2)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(3)), ('correct_resp', None)]),
      OrderedDict([('digit_value', np.int64(4)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(5)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(6)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(7)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(8)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(9)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(1)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(2)), ('correct_resp', 'space')]),
      OrderedDict([('digit_value', np.int64(3)), ('correct_resp', None)])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
    Routine sart_trial
  LoopTerminator sart_loop
