PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Stroop_experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instructions_2
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    KeyboardComponent Instruction_response_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see color words.
        Your job is to press the key that corresponds to the INK COLOR.

        NOT the word.

        r = red, g = green, b = blue, y = yellow



        Press SPACE to begin
  Routine stroop_trial
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    TextComponent Word
      color [set every repeat] = $fontColor
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $text
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'r','g','b','y'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        Any text

        +
Flow
  Routine instructions_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'text': 'RED', 'fontColor': 'red', 'condition': 'congruent', 'correct_key': 'r'},
      {'text': 'GREEN', 'fontColor': 'green', 'condition': 'congruent', 'correct_key': 'g'},
      {'text': 'BLUE', 'fontColor': 'blue', 'condition': 'congruent', 'correct_key': 'b'},
      {'text': 'YELLOW', 'fontColor': 'yellow', 'condition': 'congruent', 'correct_key': 'y'},
      {'text': 'RED', 'fontColor': 'red', 'condition': 'congruent', 'correct_key': 'r'},
      {'text': 'GREEN', 'fontColor': 'green', 'condition': 'congruent', 'correct_key': 'g'},
      {'text': 'BLUE', 'fontColor': 'blue', 'condition': 'congruent', 'correct_key': 'b'},
      {'text': 'YELLOW', 'fontColor': 'yellow', 'condition': 'congruent', 'correct_key': 'y'},
      {'text': 'RED', 'fontColor': 'red', 'condition': 'congruent', 'correct_key': 'r'},
      {'text': 'GREEN', 'fontColor': 'green', 'condition': 'congruent', 'correct_key': 'g'},
      {'text': 'BLUE', 'fontColor': 'blue', 'condition': 'congruent', 'correct_key': 'b'},
      {'text': 'YELLOW', 'fontColor': 'yellow', 'condition': 'congruent', 'correct_key': 'y'},
      {'text': 'RED', 'fontColor': 'red', 'condition': 'congruent', 'correct_key': 'r'},
      {'text': 'GREEN', 'fontColor': 'green', 'condition': 'congruent', 'correct_key': 'g'},
      {'text': 'BLUE', 'fontColor': 'blue', 'condition': 'congruent', 'correct_key': 'b'},
      {'text': 'YELLOW', 'fontColor': 'yellow', 'condition': 'congruent', 'correct_key': 'y'},
      {'text': 'RED', 'fontColor': 'red', 'condition': 'congruent', 'correct_key': 'r'}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
    Routine stroop_trial
  LoopTerminator trials
